[[model]]
name: model-30
author: Sanmitra Ghosh
desc: Check associated model definition document
# Initial values
ikr.C4 = 1
ikr.C3 = 0
ikr.C2 = 0
ikr.C1 = 0
ikr.O = 0
ikr.I = 0
ikr.IC1 = 0
ikr.IC2 = 0
ikr.IC3 = 0

#
# Simulation engine variables
#
[engine]
time = 0 bind time
pace = 0 bind pace

#
# Membrane potential
#
[membrane]
V = engine.pace
    desc: membrane potential
    in [mV]

[nernst]
EK = -85 [mV]

#
#
[ikr]
use membrane.V
IKr = p45 * O * (V - nernst.EK)

IC4 = 1 - (C1 + C2 + C3 + C4 + O + I + IC1 + IC2 + IC3)

a1 = p1 * exp( p2 * V)
b1 = p3 * exp(-p4 * V)
a2 = p5 * exp( p6 * V)
b2 = p7 * exp(-p8 * V)
a3 = p9 * exp( p10 * V)
b3 = p11 * exp(-p12* V)
a4 = p13 * exp( p14 * V)
b4 = p15 * exp(-p16 * V)
a8 = p17 * exp(p18* V)
b8 = p19 * exp(-p20 * V)
a9 = p21 * exp(p22* V)
b9 = p23 * exp(-p24 * V) 
a10 = p25 * exp(p26* V)
b10 = p27 * exp(-p28 * V) 
a5 = p29 * exp(p30 * V)
b5 = (a10*a5*b4*b3)/(a3*a4*b10)
a6 = p31 * exp(p32 * V)
b6 = (a9*a6*b5*b2)/(a2*a5*b9)
a7 = p33 * exp(p34 * V)
b7 = (a8*a7*b1*b6)/(a1*a6*b8)
a11 = p35 * exp(p36* V)
b11 = p37 * exp(-p38 * V) 
a12 = p39 * exp(p40* V)
b12 = p41 * exp(-p42 * V) 
a13 = p43 * exp(p44 * V)
b13 = (a13*a11*b7*b12)/(a12*a7*b11)

dot(C4) = b13*IC4 + b12*C3 - C4*(a13+a12)
dot(C3) = b1*C2 + a12*C4 + b7*IC3 - C3*(a1 + a7 + b12)
dot(C2) = b2*C1 + a1*C3  + b6*IC2 - C2*(a2 + b1 + a6)
dot(C1) = b3*O  + a2*C2  + b5*IC1 - C1*(a3 + b2 + a5)
dot(O) = b4*I + a3*C1 - O*(b3 + a4)
dot(I) = a4*O + a10*IC1 - I*(b4 + b10)
dot(IC1) = b10*I + a9*IC2 + a5*C1 - IC1*(b9 + a10 + b5)
dot(IC2) = b9*IC1 + a8*IC3 + a6*C2 - IC2*(a9 + b8 + b6)
dot(IC3) = b8*IC2 + a11*IC4 + a7*C3 - IC3*(a8 + b7 + b11)

p1 = 2.26e-4 [1/ms]
p2 = 0.06990 [1/mV]
p3 = 3.45e-5 [1/ms]
p4 = 0.05462 [1/mV]
p5 = 0.08730 [1/ms]
p6 = 8.91e-3 [1/mV]
p7 = 5.15e-3 [1/ms]
p8 = 0.03158 [1/mV]
p9 = 2.26e-4 [1/ms]
p10 = 0.06990 [1/mV]
p11 = 3.45e-5 [1/ms]
p12 = 0.05462 [1/mV]
p13 = 0.08730 [1/ms]
p14 = 8.91e-3 [1/mV]
p15 = 5.15e-3 [1/ms]
p16 = 0.03158 [1/mV]
p17 = 0.08730 [1/ms]
p18 = 8.91e-3 [1/mV]
p19 = 5.15e-3 [1/ms]
p20 = 0.03158 [1/mV]
p21 = 0.06990 [1/mV]
p22 = 3.45e-5 [1/ms]
p23 = 0.05462 [1/mV]
p24 = 0.08730 [1/ms]
p25 = 8.91e-3 [1/mV]
p26 = 5.15e-3 [1/ms]
p27 = 0.03158 [1/mV]
p28 = 0.08730 [1/ms]
p29 = 8.91e-3 [1/mV]
p30 = 5.15e-3 [1/ms]
p31 = 0.03158 [1/mV]
p32 = 5.15e-3 [1/ms]
p33 = 0.03158 [1/mV]
p34 = 0.03158 [1/mV]
p35 = 8.91e-3 [1/mV]
p36 = 5.15e-3 [1/ms]
p37 = 0.03158 [1/mV]
p38 = 0.08730 [1/ms]
p39 = 8.91e-3 [1/mV]
p40 = 5.15e-3 [1/ms]
p41 = 0.03158 [1/mV]
p42 = 5.15e-3 [1/ms]
p43 = 0.03158 [1/mV]
p44 = 0.03158 [1/mV]
p45 = 0.15240 [mS/uF]

n_params = 45


